CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Use the maximum Z projections for this to save computational time. ', 'Important for later in the pipeline is that all images have to end with _###.tif', 'where # represents a number']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['', 'IMPORTANT: CLICK ON EXTRACT METADATA']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['', 'CLICK ON UPDATE! ', '', 'NB: change the number of "have C matching" f the colors of your channels where acquired in any other order than Blue, Green, Red, Farred', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:BlueOrig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:GreenOrig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:RedOrig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:FarrOrig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:BlueOrig
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):120,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:15
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0017,1
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    Log transform before thresholding?:Yes
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    Size of adaptive window:100
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    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:6|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notes:['Change according to which channel your NHS is in. It is important to change this pipeline step so that it gives you good outlines depending on the staining you have used.', 'propagation method works best if you have good nhs staining. Distance-B is an elternative if there is not really a cell outline marker and you want to use donutshape/mitochondria']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
    Select the input objects:nuclei
    Name the objects to be identified:AllCells1
    Select the method to identify the secondary objects:Distance - B
    Select the input image:FarrOrig
    Number of pixels by which to expand the primary objects:250
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:filteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:15
    Threshold correction factor:0.99
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
DilateObjects:[module_num:7|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
    Select the input object:AllCells1
    Name the output object:AllCels1
    Structuring element:disk,10

ErodeObjects:[module_num:8|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
    Select the input object:AllCels1
    Name the output object:AllCells
    Structuring element:disk,2
    Prevent object removal:No
    Relabel resulting objects:No

IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:AllCells
    Select the smaller identified objects:filteredNuclei
    Name the tertiary objects to be identified:AllCytoplasm
    Shrink smaller object prior to subtraction?:No

Threshold:[module_num:10|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notes:['This is used to threshold the GFP signal and classify transfected cells']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
    Select the input image:GreenOrig
    Name the output image:ThresholdGreen
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.34
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0017,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:11|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notes:['the cell masks are converted to grayscale image in which cells are numbered through increasing grey intensity']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
    Select the input objects:AllCells
    Name the output image:AllCellsGrayscale
    Select the color format:Grayscale
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
SaveImages:[module_num:12|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notes:['IMPORTANT! CHANGE THIS FOLDER MANUALLY TO THE AUTOCBTIFFS FOLDER OF THE IMAGES !!!!']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
    Select the type of image to save:Image
    Select the image to save:AllCellsGrayscale
    Select method for constructing file names:From image filename
    Select image name for file prefix:FarrOrig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:mask
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|LocalFiles/LAB17/new/AutoCBtiffs
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MaskObjects:[module_num:13|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
    Select objects to be masked:AllCells
    Name the masked objects:TransfectedCells
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThresholdGreen
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.01
    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:14|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enabled:False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
    Select objects to be masked:AllCells
    Name the masked objects:NonTransfectedCells
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThresholdGreen
    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MaskObjects:[module_num:15|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enabled:False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
    Select objects to be masked:AllCytoplasm
    Name the masked objects:TransfectedCytoplasm
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThresholdGreen
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.25
    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:16|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enabled:False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
    Select objects to be masked:AllCytoplasm
    Name the masked objects:NonTransfectedCytoplasms
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThresholdGreen
    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:17|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notes:['This will create an output file with all kind of intensity measurements. ']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
    Select images to measure:BlueOrig, FarrOrig, GreenOrig, RedOrig, ThresholdGreen
    Select objects to measure:AllCells, AllCytoplasm, TransfectedCells, filteredNuclei, nuclei

MeasureObjectIntensityDistribution:[module_num:18|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notes:['This can be used to find the MDF value in R. NOTE: THIS ONLY MAKES SENSE IF THE CELLOUTLINES ARE RELIABLE ']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
    Select images to measure:FarrOrig, GreenOrig, RedOrig, ThresholdGreen
    Hidden:1
    Hidden:1
    Hidden:2
    Calculate intensity Zernikes?:None
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    Select objects to measure:AllCytoplasm
    Object to use as center?:These objects
    Select objects to use as centers:filteredNuclei
    Scale the bins?:Yes
    Number of bins:20
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    Image:FarrOrig
    Objects to display:Do not use
    Number of bins:10
    Measurement:Fraction at Distance
    Color map:Purples_r
    Save display as image?:No
    Output image name:Heatmap
    Image:GreenOrig
    Objects to display:Do not use
    Number of bins:10
    Measurement:Fraction at Distance
    Color map:Blues_r
    Save display as image?:No
    Output image name:Heatmap

ExportToSpreadsheet:[module_num:19|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notes:['IMPORTANT: Change folder manually to your folder that contains the maxZ and autoCBtiffs folders.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|LocalFiles/LAB17/new
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:AllCytoplasm|RadialDistribution_RadialCV_RedOrig_5of20,AllCytoplasm|RadialDistribution_RadialCV_RedOrig_2of20,AllCytoplasm|RadialDistribution_RadialCV_RedOrig_20of20,AllCytoplasm|RadialDistribution_RadialCV_RedOrig_9of20,AllCytoplasm|RadialDistribution_RadialCV_RedOrig_10of20,AllCytoplasm|RadialDistribution_RadialCV_RedOrig_19of20,AllCytoplasm|RadialDistribution_RadialCV_RedOrig_1of20,AllCytoplasm|RadialDistribution_RadialCV_RedOrig_17of20,AllCytoplasm|RadialDistribution_RadialCV_RedOrig_11of20,AllCytoplasm|RadialDistribution_RadialCV_RedOrig_15of20,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CP_measurements
    Overwrite existing files without warning?:Yes
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